global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'pulsestreamer']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

    extensions:
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH IF NECESSARY
        - ''

hardware:
    
    spm:
        module.Class: 'spm.spm_asc500.SPM_ASC500'
        sync_in_timeout:  0 # in ms
        galvo_mode: True
        obj_volt_ulim_uV: 10e6 # 10 volts
        galvo_range_ulim: 20e-6 # needs to be calibrated - in metres

        sample_scan_range: {'X': 21e-6, 'Y': 21e-6, 'Z': 7e-6} # in metres
        sample_voltage_range: {'X': 3, 'Y': 3, 'Z': 6} # in volts

        binPath: "C:\\Software\\qudi\\hardware\\spm\\spm_library\\ASC500_Python_Control\\ASC500_2014_08_14\\"
        dllPath: "C:\\Software\\qudi\\hardware\\spm\\spm_library\\ASC500_Python_Control\\ASC500_2014_08_14\\64bit_lib_copied\\"
    
    time_tagger:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 1
        timetagger_channel_apd_1: 8
        pixelclock_begin_chn: 2
        pixelclock_click_chn: 1
        pixelclock_end_chn: 3
        timetagger_channel_detect: 2
        timetagger_channel_next: 3

        timetagger_sum_channels: False
    
    fastcounter_time_tagger:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        timetagger_channel_apd_0: 1
        timetagger_channel_detect: 2
        timetagger_channel_next: 3
        timetagger_channel_sequence: 7
        timetagger_sum_channels: False

    # smiq:
    #     module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
    #     gpib_address: 'GPIB0::25::INSTR'
    #     gpib_timeout: 20 # in seconds
    #     frequency_min: 300e3  # optional, in Hz
    #     frequency_max: 3.3e9  # optional, in Hz
    #     power_min: -100  # optional, in dBm
    #     power_max: 0  # optional, in dBm

    mw_source_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'

    mw_source_smr:
        module.Class: 'microwave.mw_source_smr.MicrowaveSMR'
        gpib_address: 'GPIB0::28::INSTR'
        gpib_timeout: 10

    mw_source_smb:
        module.Class: 'microwave.mw_source_smbv.MicrowaveSmbv'
        gpib_address: 'TCPIP::169.254.2.20::inst0::INSTR'
        gpib_timeout: 10
    
    mw_source_sgs:
        module.Class: 'microwave.mw_source_sgs.MicrowaveSgs'
        gpib_address: 'TCPIP::129.69.46.38::inst0::INSTR'
        gpib_timeout: 10
    
    pulsestreamer:
        module.Class: 'swabian_instruments.pulse_streamer.PulseStreamer'
        pulsestreamer_ip: '129.69.46.234'
        laser_channel: 0
        laser_analog_channel: 0
        laser_power_voltage_max: 0.65 #in V - for the cobolt laser this is something like 6mW before fiber - only works for HW file commands

        uw_x_channel: 5
        use_external_clock: False
        external_clock_option: 0

        pixel_start: 1
        pixel_stop: 2
        sync_in: 3
        mw_trig: 5
        mw_switch: 4
        # 0 - AOM Digital
        # 1 - Timetagger 2 channel
        # 2 - Timetagger 3 channel
        # 3 - ASC500 Sync
        # 4 - MW Switch
        # 5 - MW Trig
        # A0 - AOM Analog

    
    awg_spectrum:
        module.Class: 'awg.spectrumAWG_6631.AWG663'
        awg_ip_address: 129.69.46.24
        timeout: 30
        waveform_folder: 'C:\\Users\\yy3\\saved_pulsed_assets\\waveform'
        sequence_folder: 'C:\\Users\\yy3\\saved_pulsed_assets\\sequence'
        # invert_channel: "d_ch2" # Invert switch channel
        
    
    # ocean_spectrometer:
    #     module.Class: 'spectrometer.oceanoptics_spectrometer.OceanOptics'
    #     spectrometer_serial: 'QEP02178' #insert here the right serial number.

    confocalscanner_dummy:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'
    
    ANC350_Top:
        module.Class: 'motor.Attocube_ANC350.Positioner'
        axes_list: {'SampleX': {'ID':'0', 'pos_min':'-9e-3', 'pos_max':'9e-3'},
                    'SampleY': {'ID':'1', 'pos_min':'-9e-3', 'pos_max':'9e-3'},
                    'SampleZ': {'ID':'2', 'pos_min':'-9e-3', 'pos_max':'9e-3'},
                    'TipX': {'ID':'3', 'pos_min':'-9e-3', 'pos_max':'9e-3'},
                    'TipY': {'ID':'4', 'pos_min':'-9e-3', 'pos_max':'9e-3'},
                    'TipZ': {'ID':'5', 'pos_min':'-9e-3', 'pos_max':'9e-3'}}

        device_no: 0 #if either of the device looks funny in the displayed values (two axes with zeros, or values not where it is supposed to be) then chances are the device number needs to be flipped
    
    ANC350_Bottom:
        module.Class: 'motor.Attocube_ANC350.Positioner'
        axes_list: {'MagnetX': {'ID':'0', 'pos_min':'-12e-3', 'pos_max':'3.4e-3'},
                    'MagnetY': {'ID':'1', 'pos_min':'-6e-3', 'pos_max':'3.6e-3'},
                    'MagnetZ': {'ID':'2', 'pos_min':'-6.4e-3', 'pos_max':'2e-3'},
                    'ObjZ': {'ID':'3', 'pos_min':'5.85e-3', 'pos_max':'5.95e-3'}} # positions for small fields
                    #for high fields: y: +3.6e-3 to -0.5e-3 and z: -7.5e-3 to 2.0e-3

        device_no: 2 #if either of the device looks funny in the displayed values (two axes with zeros, or values not where it is supposed to be) then chances are the device number needs to be flipped

    temperature_controller_lakeshore_335:
        module.Class: 'lakeshore_335_PID_temperature_controller.temperaturecontroller335'
        serial_port: 'COM4'
        output: 1 #Chose 1 or 2
        mode: 1 #0=off, 1=closed loop PID, 2=zone, 3=open loop, 4=monitor out, 5=warmup supply
        powerup: 0 #0=off, 1=on
        type: 0 #0=current, 1=voltage (valtage only for output 2 possible)
        resistance: 1 #1=25ohm, 2=50ohm of used heater
        max_current: 1 #0=user specified, 1=0.707A, 2=1A, 3=1.141A, 4=1.732A maximum heater output current
        max_current_user: 0 #specifies maximum heater output current for 0=user specified
        input: 'A' #Chose A or B
        sensor_type: 2 #0=Disabled, 1=Diode, 2=Platinum RTD, 3 =NTC RTD, 4 =Thermocouple
        autorange: 1 #0=off, 1=on
        range: 0 #range used when autorange is off. See manual for details
        compensation: 1 #0=off, 1=on
        units: 1 #1=Kelvin, 2=Celsius, 3=Sensor
        curve_number: 21 #Chose number of the used calibration curve.

    smu_GS610:
        module.Class: 'smu.GS610_source_measure_unit.GS610sourcemeasureunit'
        serial_port: 'USB0::0x0B21::0x001E::90Z931989C::INSTR'

    smu_dummy:
        module.Class: 'smu.source_measure_unit_dummy.sourcemeasureunitDummy'

    smu_dummy_2:
        module.Class: 'smu.source_measure_unit_dummy.sourcemeasureunitDummy'

logic:

    afm_scanner_logic:
        module.Class: 'afm_confocal_logic.AFMConfocalLogic'
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH
        meas_path: 'D:\\Data\\RT_AFM_Data'
        mw_mode: 'SWEEP'
        # must use LIST mode with SMB100A or most R&S devices since sweep has a duplicated first entry ofr ODMR freq list
        connect:
            spm_device: 'spm'
            savelogic: 'savelogic'
            counter_device: 'time_tagger'
            fitlogic: 'fitlogic'
            pulser: 'pulsestreamer'
            microwave: 'mw_source_smr' 
            microwave1: 'mw_source_dummy'
            pulsed_master: 'pulsedmasterlogic'
            pulsed_master_AWG: 'pulsedmasterlogic_AWG'
            podmr: 'podmrlogic'
            _pulsed_jupyter_logic: 'pulsedjupyterlogic_AWG'
    
    pulsedjupyterlogic_AWG:
        module.Class: 'jupyter_pulsed_AWG_master_logic.PulsedJupyterLogic'
        connect:
            _pulsed_master: 'pulsedmasterlogic'
            _pulsed_master_AWG: 'pulsedmasterlogic_AWG'

    positioner_logic_top:
        module.Class: 'positioner_logic.PositionerLogic'
        connect:
            _positioner: 'ANC350_Top'
    
    positioner_logic_bottom:
        module.Class: 'positioner_logic.PositionerLogic'
        connect:
            _positioner: 'ANC350_Bottom'

    # pulsedjupyterlogic:
    #     module.Class: 'jupyter_pulsed_logic.PulsedJupyterLogic'
    #     connect:
    #         _afm_scanner_logic: 'afm_scanner_logic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'time_tagger'
            #counter1: 'mq'
            savelogic: 'savelogic'

    odmr_counter_interfuse:
        module.Class: 'interfuse.odmr_counter_pulser_interfuse.ODMRCounterInterfuse'
        IQ_mixer: True
        check_sequence_in_mem: False
        connect:
            slowcounter: 'time_tagger'
            pulser: 'pulsestreamer'
            AWG: 'awg_spectrum'
            pulse_creator: 'pulsedjupyterlogic_AWG'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_interfuse'
            fitlogic: 'fitlogic'
            microwave1: 'mw_source_smr'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
        scanmode: 'LIST' #Toni changed to AWG, before it was LIST
    
    podmrlogic:
        module.Class: 'podmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_interfuse'
            fitlogic: 'fitlogic'
            microwave1: 'mw_source_smr'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
            pulsed_master_AWG: 'pulsedmasterlogic_AWG'
            pulse_creator: 'pulsedjupyterlogic_AWG'
    
    # BayOptOdmrlogic:
    #     module.Class: 'bay_opt_odmr_logic.ODMRLogic'
    #     connect:
    #         odmrcounter: 'odmr_counter_interfuse'
    #         fitlogic: 'fitlogic'
    #         microwave1: 'mw_source_smbv'
    #         savelogic: 'savelogic'
    #         taskrunner: 'tasklogic'
    #     scanmode: 'SWEEP'
    
    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH
        win_data_directory: 'D:\\Data\\RT_AFM_Data'
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'confocalscanner_dummy'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        overhead_bytes: 0  # Not properly implemented yet
        disable_benchmark_prompt: True
        connect:
            pulsegenerator: 'pulsestreamer'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'fastcounter_time_tagger'
            pulsegenerator: 'pulsestreamer'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'mw_source_smr'
            microwave1: 'mw_source_dummy'
    
    pulsedmasterlogic_AWG:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic_AWG'
            sequencegeneratorlogic: 'sequencegeneratorlogic_AWG'

    sequencegeneratorlogic_AWG:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        assets_storage_path: 'C:\\Users\\yy3\\saved_pulsed_assets\\sequence'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        overhead_bytes: 0  # Not properly implemented yet
        disable_benchmark_prompt: True
        connect:
            pulsegenerator: 'awg_spectrum'

    pulsedmeasurementlogic_AWG:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'fastcounter_time_tagger'
            pulsegenerator: 'awg_spectrum'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'mw_source_smr'
            microwave1: 'mw_source_dummy'
    
    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnet_motor_interfuse'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            traceanalysis: 'traceanalysis'
            gatedcounterlogic: 'counterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic_AWG'
    
    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        axes: ['MagnetX','MagnetY','MagnetZ']
        connect:
            motorstage: 'ANC350_Bottom'

    traceanalysis:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'counterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    qdplotlogic:
        module.Class: 'qdplot_logic.QDPlotLogic'
        default_plot_number: 3
        connect:
            save_logic: 'savelogic'
            fit_logic: 'fitlogic'

    # spectrumlogic:
    #     module.Class: 'spectrum.SpectrumLogic'
    #     connect:
    #         spectrometer: 'ocean_spectrometer'
    #         savelogic: 'savelogic'
    #         fitlogic: 'fitlogic'

    tip_temp_controller_pid_logic:
        module.Class: 'pid_logic.PIDLogic'
        timestep: 0.1
        connect:
            controller: 'temperature_controller_lakeshore_335'
            savelogic: 'savelogic'

    transportlogic:
        module.Class: 'transport_logic.TransportLogic'  
        connect:
            sample_smu: 'smu_dummy'
            gate_smu: 'smu_dummy_2'
            controller: 'attodry2200'
            savelogic: 'savelogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    qafm_gui:
        module.Class: 'qafm.qafm_gui.ProteusQGUI'
        color_map: 'bwr'
        connect:
            qafmlogic: 'afm_scanner_logic'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'
    
    podmr:
        module.Class: 'podmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'podmrlogic'
            savelogic: 'savelogic'

    pos_top_gui:
        module.Class: 'positioner.positionergui.PositionerGui'
        connect:
            positionerlogic: 'positioner_logic_top'
    
    pos_bottom_gui:
        module.Class: 'positioner.positionergui.PositionerGui'
        connect:
            positionerlogic: 'positioner_logic_bottom'

    # BayOptOdmr:
    #     module.Class: 'bay_opt_odmr.odmrgui.ODMRGui'
    #     connect:
    #         odmrlogic1: 'BayOptOdmrlogic'
    #         savelogic: 'savelogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
    
    pulsedmeasurement_AWG:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic_AWG'
    
    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'
    
    qdplotter:
        module.Class: 'qdplotter.qdplotter_gui.QDPlotterGui'
        pen_color_list: ['b', 'y', 'm', 'g']
        connect:
            qdplot_logic: 'qdplotlogic'

    # spectrometer:
    #     module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
    #     connect:
    #         spectrumlogic: 'spectrumlogic'

    tip_temp_controller:
        module.Class: 'pidgui.pidgui.PIDGui'
        control_unit: '%'
        process_unit: 'K'
        connect:
            pidlogic: 'tip_temp_controller_pid_logic'

    transport:
        module.Class: 'transport.transport_gui.TransportGUI'
        color_map: 'bwr'
        connect:
            transportlogic: 'transportlogic'
